'$Id$

var dlguNPorts%;    ' set to number of ports used in WMCNPortDialog%()

' Input arrays represent the analog input ports on the 1401 - wmports%[] are for wavemark, contports%[] are for
' continuous record.
' Will generate a dialog with checkboxes for each port. The port numbers start at 0 and go up to the size of 
' wmports%[] and contports%[]. 

func WMPortDialog%(title$, wmports%[])
    var n%;
    var i%;
    n% := Len(wmports%[]);
    
	DlgCreate(title$);
    for i% := 1 to n% do
        DlgCheck(i%, "Port " + str$(i%-1), 5, i%);
    next;
	i% := DlgShow(wmports%[]);
    return i%;
end


' Assume that length of wmports and cnports is the same. 
' Will allow selection of ports in first column. If selected, port is 
' wavemark if the "continuous" checkbox is UNCKECKED. 
' Continuous checkbox cannot be checked without checking wm checkbox. 

func WMCNPortDialog%(title$, wmports%[], cnports%[])
    var n%;
    var i%;
    n% := max(Len(wmports%[]), Len(cnports%[]));
    dlguNPorts% := n%;
	DlgCreate(title$);
    for i% := 1 to n% do
        DlgText("Port " + str$(i%-1), 0, i%);
        DlgCheck(i%, "Wavemark", 10, i%);
        DlgCheck(i%+n%, "Continuous", 30, i%);
    next;
    DlgCheck((2*n%)+1, "Use Plexon 15/15", 10, n%+1);
    DlgCheck((2*n%)+2, "Use Plexon 7/15", 30, n%+1);
    DlgAllow(0xffff, 0, WMCNPortDialogChanged%);
	i% := DlgShow(wmports%[0:n%], cnports%[0:n%], UsePlexon15WF15WF2k%, UsePlexon7WM15CN%);
    return i%;
end

func WMCNPortDialogChanged%(item%)
    var j%;
    var enable%;
    if DlgValue((2*dlguNPorts%)+1) = 1 or DlgValue((2*dlguNPorts%)+2) = 1 then
        enable% := 0;
    else
        enable% := 1;
    endif
    
    docase
    case item% = 0 then
        for j% := 1 to dlguNPorts% do
'            DlgValue(j%, wmports%[j%]);
'            DlgValue(j%+n%, cnports%[j%]);
        next
        for j% := 1 to (2*dlguNPorts%) do
            'DlgEnable(1-DlgValue((2*dlguNPorts%)+1), j%);
            DlgEnable(enable%,j%);
        next;
    case item% = (2*dlguNPorts%)+1 then
        for j% := 1 to (2*dlguNPorts%) do
            'DlgEnable(1-DlgValue((2*dlguNPorts%)+1), j%);
            DlgEnable(enable%,j%);
        next;
    case item% = (2*dlguNPorts%)+2 then
        for j% := 1 to (2*dlguNPorts%) do
            'DlgEnable(1-DlgValue((2*dlguNPorts%)+2), j%);
            DlgEnable(enable%,j%);
        next;
    endcase
    
    return 1;
end

        
    