' $Id$
'
'

#include "KrubTuningDialogs.s2s"
#include "../../Spike2Util/KrubRigParameters.s2s"
#include "UsreyGratings.s2s"
#include "../../Spike2Util/UsreyUtil.s2s"
#include "../../Spike2Util/FileUtilities.s2s"
#include "../../Spike2Util/MiscUtilities.s2s"
#include "../../Spike2Util/ChannelUtilities.s2s"

' tuning type-specific values
var tunFileLabel$ := "zzz";

' tuning daq parameters
var tunNChannels%;
var tunColorIndex%;
var tunColor$[4];

' daq channels for triggers from vsg
var tunChanTrigger% := 11;
var tunChanVSGReady% := 12;

' prog handles
var tunHandleStim := -1;

' window handles
var tunWindowData%;

' folder for stim files
var tunStimFolder$;



' Initializations

tunBGColor$[0] := "gray";
tunBGColor$[1] := "black";
tunBGColor$[2] := "white";

tunColor$[0] := "Black and white";
tunColor$[1] := "S cone isolating";
tunColor$[2] := "M cone isolating";
tunColor$[3] := "L cone isolating";

tunGratingParams$ := GetGratingParameters$("Stimulus");
tunStimFolder$ := GetDataPathRoot$() + "\\stim";

' TODO: Resize window?
'View(App(0)).Window(0,0,75,95);




'~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~~
' Script starts here

' Initialize logging
LogInit(1);


' Get experimental parameters. 
' tunFileLabel$ is set here! 
if KrubTuningDialog%() = 0 then
    halt;
endif

if tuntypeSelected% = tuntypeNone% then
    Message("No tuning type selected!");
    halt;
endif

' Sampling config
'CreateSampleConfiguration();

' Prepare display windows, input channels, etc. 
'InitializeWindows();


	
ToolbarSet(1,"Quit",Quit%);
ToolbarSet(2,"Sample start",Start%);
ToolbarSet(3,"Sample stop", Stop%);
ToolbarEnable(3,0);
Toolbar("Go",1234);

' Oh no! Make sure sampling has stopped!
if SampleStatus() <> -1 then
    LogWarn("KrubTuning", "Toolbar exited and sampling status is " + str$(SampleStatus()) + ". Stopping sampling...");
    SampleStop();
    LogWarn("KrubTuning", "Sampling stopped.");
endif


proc CreateSampleConfiguration()
    
    var i%;
    
	SampleClear(); 'Set standard sampling state
	SampleAutoComment(0); 'Prompt for comment after sampling
	SampleAutoCommit(60); 'Seconds between each file commit
    
    FilePathSet(GetDataPathRoot$() + "\\" + GetDataSetName$(), 3);
    FilePathSet(GetDataPathRoot$() + "\\" + GetDataSetName$(), 1);
    SampleAutoName$(dataCellName$ + "_" + tunFileLabel$ + "_000");
	SampleAutoFile(1);

    'Channel recording definitions

    for i% := 1 to tunNChannels% do
        SampleWaveMark(i%, i%-1, 2000, 34, 15, 28000); ' chan, port, event rate, points, pre-trigger, rate
        SampleTitle$(i%, "Trode " + Str$(i%-1));
    next

    SampleEvent(tunChanTrigger%, 1, 1, 1000); 
    SampleTitle$(tunChanTrigger%, "Terms");
    
    
    ' There is no sequencer script in use
	'SampleSequencer(script$ + "KrubTuning.pls");
    SampleOptimise(2, 2, 2, 2, 50);  'Set optimise mode (do this last)
    SampleMode(1); 'Continuous sampling
    
end;


proc InitializeWindows()
    var i%;
    var AutoCorr%;
    
	View(App(8)).WindowVisible(0);	'Hide the standard sample bar
    
    tunWindowData% := FileNew(0,4);
    View(tunWindowData%).WindowVisible(1);
    View(tunWindowData%).Window(0,33,100,100);

    SaveParameterFile();
end

proc SaveParameterFile()
    var handle;
    var filename$;
    
    filename$ := ReplaceFileExtension$(-1, "par");
    handle := FileOpen(filename$, 8, 1);
    if handle <0 then 
        Message("Could not create parameter file " + filename$);
    else
        LogInfo("TODO : Writing parameters to file " + filename$);
        FileClose();
    endif
    
    return;
end




' Quit is used to exit the script entirely. 
' If there are any VSG apps running they should be stopped now. 
' All VSG apps should be triggered off if possible - that allows for clean
' handling of the lock. 
' Could check if app is running, display error message. 

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
func Quit%()
'   TODO: Check for running vsg app.
    return 0;
end;

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

' Start is used to start sampling and launch the visual stim. 
' Start must take things from post-dialog (i.e. all parameters can 
' be assumed to be expt-ready, but live, daq-related values (updated in Idle%() ) - tStateStart, 
' iState%, etc.) have only been initialized, not used.
' Start should start sampling, initiate the idle function, 
' THEN launch the visual stim script. The order is important so that the "ready" triggers from the 
' stim will be picked up.

func Start%()
    var cmd$;
    var i%;
    var h%;
    var s$;
    var screenWidth;
    var x, y, w, h, contrast%, sf, tf, ori, cv$, pattern$, aperture$;
    var stimfile$, quitfile$;
    
    ' Start sampling
    SampleStart(0);
    View(tunWindowData%);    
    
    ' Set idle here - before vsg launches so we cannot miss the ready signal. 
    ToolbarEnable(3,1); ' stop
    ToolbarEnable(2,0); ' start
    ToolbarEnable(1,0); ' quit
    ToolbarSet(0, "", Idle%);
    
    ' Before generating command file, fetch the base grating parameters.
    ParseGratingParameters%(tunGratingParams$, x, y, w, h, contrast%, sf, tf, ori, cv$, pattern$, aperture$);
    
    ' Delete old stim file if there is one sitting there. 
    stimfile$ := tunStimFolder$ + "\\stim.txt";
    quitfile$ := tunStimFolder$ + "\\quit.txt";
    FileDelete(stimfile$);
    FileDelete(quitfile$);
    
    ' Open text file
    h% := FileNew(1, 0);
    if h% < 0 then
        LogError("Start", "Cannot open text file!");
        halt;
    endif
    
    ' Write header
    screenWidth := GetKrubScreenWidth%()/10.0;
    Print("header,%.1f,%s,%d,1,%d,%d,%d\n", screenWidth, GetAcuteDistanceToScreenMM$(), GetKrubMaskType%(), GetKrubTriggerSqPixels%(), GetKrubTriggerSqFrames%(), GetKrubBgColor%());
    
    ' Ready pulses (2)
    Print("ready,2\n");
    
    ' Stim/blank/blank for each stim 
    for i% := 0 to ((tunNSteps%+1)*tunNRepeats%)-1 do
        docase 
        case tuntypeSelected% = tuntypeOri% then
            s$ := EncodeGratingParameters$(x, y, w, h, contrast%, sf, tf, tunParameterValues[tunParameterIndices%[i%]], cv$, pattern$, aperture$);
        case tuntypeSelected% = tuntypeDom% then
            s$ := EncodeGratingParameters$(x, y, w, h, tunParameterValues[tunParameterIndices%[i%]], sf, tf, ori, cv$, pattern$, aperture$);
        case tuntypeSelected% = tuntypeSF% then
            s$ := EncodeGratingParameters$(x, y, w, h, contrast%, tunParameterValues[tunParameterIndices%[i%]], tf, ori, cv$, pattern$, aperture$);
        case tuntypeSelected% = tuntypeTF% then
            s$ := EncodeGratingParameters$(x, y, w, h, contrast%, sf, tunParameterValues[tunParameterIndices%[i%]], ori, cv$, pattern$, aperture$);
        else
            LogError("Start", "Unknown tuning curve type (" + str$(tuntypeSelected%) + ")");
            halt;
        endcase
        
        View(h%).Print("grating," + s$ + "," + str$(tunStimTime) + "\n");
        View(h%).Print("tblank," + str$(tunBlankTime) + "\n");
        View(h%).Print("tblank,0.5\n");
        
    next
    
    ' Close (and name) file
    i% := View(h%).FileSaveAs(stimfile$);
    if i% < 0 then
        LogError("Start", Error$(i%));
        Message(Error$(i%));
        return 0;
    endif
    View(h%).FileClose();
    return 1;
end;

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''


' Stop must stop applications and sampling nicely. Adjust toolbar to wait for "quit", stop Idle%(). 
' Generate quit file for the visual stim application. 

func Stop%()
    
    ' remove the idle process. 
    ToolbarSet(0, "");
    ToolbarEnable(1, 1);
    ToolbarEnable(3, 0);
    
    ' send the quit command before stopping sampling
    FileOpen(tunStimFolder$ + "quit.txt", 8, 1);
    FileClose();
    
    '   TODO 
    ' Generate a "stop" command file for matlab/psychtbx script
    
    SampleStop();

    return 1;
end; 
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

var tNow;               ' Set on entering this func. For this invocation it is the latest time sampled. 
var tLast;              ' This is tNow from the last time Idle%() was called. 
var tStateStart := -1;  ' Start time of current state
var tStimStart := -1;   ' Time of stim ON trig
var tBlankStart := -1;  ' Time of blankON trig
var tBlankEnd := -1;    ' time of blankOFF trig
var iStimCounter% := 0;
var iBlankCounter% := 0;
var tTrigger := -1;
var vTrigger;
var tLastTrigger := -1;
var tPulseWindowStart := -1;
var tPulseUp := -1;
var tPulseDn := -1;
const tReadyPulseTimeout := 5;


' states
const stateStartup%             :=  1;
const stateWaitForReadyPulse1%  :=  2;
const stateWaitForReadyPulse2%  :=  3;
const stateStartTuning%         :=  4;
const stateNoStim%              :=  5;
const stateStimON%              :=  6;
const stateBlankON%             :=  7;
const stateDone%                := 99;
var iState% := stateStartup%;              ' This holds the current state
var iDummy% := 0;

func Idle%()
    var status% := 1;
    View(tunWindowData%);
	tNow := MaxTime();
    
    docase 
    case iState% = stateStartup% then
        
        LogStatus("stateStartup", "Starting up.");
        ChangeStateTo(stateWaitForReadyPulse1%, tNow);
        
    case iState% = stateWaitForReadyPulse1% then
        
        ' Check for pulse, then for timeout
        docase 
        case FindPulseUp%(tunChanTrigger%, tStateStart, tPulseUp, tPulseDn) = 1 then
            ChangeStateTo(stateWaitForReadyPulse2%, tNow);
        case tNow-tStateStart > tReadyPulseTimeout then
            Message("Did not see ready pulse from vis stim application. Check that it is running, and that the trigger device is ready.");
            ChangeStateTo(stateDone%, tNow);
        endcase
        
    case iState% = stateWaitForReadyPulse2% then
        
        ' Check for pulse, then for timeout
        docase 
        case FindPulseUp%(tunChanTrigger%, tStateStart, tPulseUp, tPulseDn) = 1 then
            ChangeStateTo(stateStartTuning%, tPulseDn);
        case tNow-tStateStart > tReadyPulseTimeout then
            Message("Did not see ready pulse from vis stim application. Check that it is running, and that the trigger device is ready.");
            ChangeStateTo(stateDone%, tNow);
        endcase
        
    case iState% = stateStartTuning% then
        
        ' Issue sample key to start stim, then switch to looking for triggers
        LogStatus("stateStartTuning", "Ready for stim triggers.");
        'Yield(1.0);
        'SampleKey("s");
        ChangeStateTo(stateNoStim%, tNow);
        
    case iState% = stateNoStim% then
        
        ' Waiting for the first trig - which indicates the stim is on
        if FindEvent%(tunChanTrigger%, tStateStart, tStimStart) > 0 then
            ChangeStateTo(stateStimON%, tStimStart);
        endif
        
    case iState% = stateStimON% then
        
        ' Waiting for the second trig - which indicates the stim is off
        if FindEvent%(tunChanTrigger%, tStimStart, tBlankStart) > 0 then
            ' TODO process spikes
            LogInfo("TODO: Process spikes for STIM " + str$(iStimCounter%) + " " + str$(tStimStart) + "-" + str$(tBlankStart) + " " + str$(tunParameterValues[tunParameterIndices%[iStimCounter%]]) + "\n");
            iStimCounter% += 1;
            ChangeStateTo(stateBlankON%, tBlankStart);
        endif
        
    case iState% = stateBlankON% then
        
        ' Waiting for the third trig - which indicates the blank is off
        if FindEvent%(tunChanTrigger%, tBlankStart, tBlankEnd) > 0 then
            
            LogInfo("TODO: Process spikes for BLANK " + str$(iBlankCounter%) + " " + str$(tBlankStart) + "-" + str$(tBlankEnd) + "\n");
            iBlankCounter% += 1;            
            
            ' check whether all stim have been presented
            if iStimCounter% = (tunNSteps%+1) * tunNRepeats% then
                ChangeStateTo(stateDone%, tNow);
            else
                ChangeStateTo(stateNoStim%, tBlankEnd);
            endif
        endif
        
    case iState% = stateDone% then
        
        Stop%();
        status% := 1;
        
    else
        
        LogError("", "Unknown state " + str$(iState%));
        Stop%();
        status% := 0;
        
    endcase
    
    return status%;
end

proc ChangeStateTo(stateTo%, tStart)
	iState% := stateTo%;
	if tStart > 0 then tStateStart := tStart; endif;
end;
