' $Id$


' File system reference vars. Each var is a directory path, WITHOUT the trailing slash. 
var bin$, script$, config$;
script$ := View(App(3)).FileName$(1) + View(App(3)).FileName$(2);	' folder containing this script
bin$ := View(App(3)).FileName$(1) + View(App(3)).FileName$(2) + "..\\bin";	' Location of executables is ..\bin, relative to script dir
config$ := View(App(3)).FileName$(1) + View(App(3)).FileName$(2) + "..\\config";	' Location of executables is ..\bin, relative to script dir
GetDataParameters();


' Use these functions to get directory names. The values returned do NOT have (have) trailing slashes if the 
' parameter iSlashes% is 0 (1). 
'
' GetScriptDir$() - return folder containing rig scripts
' GetBinDir$() - returns folder containing VSG executables
' GetConfigDir$() - return config dir (unused)


func GetScriptDir$(iSlashes%)
    if iSlashes% = 0 then
        return script$;
    else
        return script$ + "\\";
    endif
end

func GetBinDir$(iSlashes%)
    if iSlashes% = 0 then
        return bin$;
    else
        return bin$ + "\\";
    end
end

func GetConfigDir$(iSlashes%)
    if iSlashes% = 0 then
        return config$;
    else
        return config$ + "\\";
    endif
end



' This file provides functionality to fetch, save and modify data parameters for Alert Rig scripts. 
' The parameters controlled here are stored in the registry (under the Spike2 key HKCU/Software/CED/Spike2/)
' using the name of the rig (ENCLOSING SCRIPTS MUST HAVE A VAR NAMED thisRigName$ WITH A VALID VALUE!!!), 
' e.g. AlertRig. The entire key is (using this example):
' HKCU/Software/CED/Spike2/AlertRig/Data
'
' Requires "RigName.s2s" be #included, or that the var "thisRigName$" be initialized. 
'
' Usage should be as follows:
'
' 1. Retrieve parameters from registry:
'
' GetDataParameters();  
'
' 2. Open dialog to modify values:
'
' if DataParametersDialog() = 1 then
'    ...continue....
' else
'    ...user hit Cancel...
' endif
'
' There is no need to directly call SaveDataParameters(), as it is called automatically
' when the user hits OK in the DataParametersDialog. 


var dataPathRoot$;		' base path for data storage
var dataDataSet$;		' folder under data path where data files placed
var dataCellName$;		' part of base name for all data files
var dataDataSetTextItem%;	' 

proc GetDataParameters()
	var stmp$;
	var key$;

'	key$:="AlertRig\\Data";
	key$ := GetRigName$() + "\\Data";

	Profile(key$, "PathRoot", "C:\\Experiments", dataPathRoot$);
	Profile(key$, "DataSet", "", dataDataSet$);
	Profile(key$, "CellName", "", dataCellName$);
	return;
end;

proc SaveDataParameters()
	var stmp$;
	var key$;

	key$ := GetRigName$() + "\\Data";

	Profile(key$, "PathRoot", dataPathRoot$);
	Profile(key$, "DataSet", dataDataSet$);
	Profile(key$, "CellName", dataCellName$);
	return;
end;

func DataParametersDialog%()
	var i%;
	GetDataParameters();
	DlgCreate("Data Storage Parameters", 25, 10, 50);
	DlgText("Data root path: " + dataPathRoot$, 0, 1);
	dataDataSetTextItem% := DlgText("Data set name: " + dataDataSet$, 0, 2);
	DlgString(1, "Cell name:", 10, "", 0, 3);
        DlgButton(2, "New Data Set", NewDataSet%);
	i% := DlgShow(dataCellName$);
	if (i% = 1) then
		if Len(dataDataSet$) = 0 then
			Message("Must specify a data set (try the button!)");
		else
			if Len(dataCellName$) = 0 then
				Message("Must specify a cell name");
			else
				FilePathSet(dataPathRoot$ + "\\" + dataDataSet$, 3, 1);
				SaveDataParameters();
			endif;
		endif;
	endif;
	return i%;
end;


func NewDataSet%()
	var d$;
	var i%;
	var dirs$[100];	' if there are ever more than 100 datasets in a single day there will be trouble
	d$ := Date$(2, 2, 3, 3, "-");
	PrintLog("NewDataSet: date string = " + d$ + "\n");

	' Change current dir to data path root, then get list of subdirs with this date string
	PrintLog("NewDataSet: dataPathRoot$=" + dataPathRoot$ + "\n");
	FilePathSet(dataPathRoot$, 0, 1);
	i% := FileList(dirs$, -2, d$ + "-??");
        PrintLog("NewDataSet: found " + str$(i%) + " dirs\n");

	' form new dataset name. The first will have "-01" appended, the second "-02", etc. 
	dataDataSet$ := Print$("%s-%02d", d$, i%+1);
	PrintLog("NewDataSet: dataset= " + dataDataSet$ + "\n");
	DlgValue$(dataDataSetTextItem%, "Data set name: " + dataDataSet$);
	return 1;
end;



'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
' Data parameters END
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Configuration Selection START
'
'	These functions and vars handle the current configuration and the list of possible
'	configurations. SelectConfigurationDialog% prompts user to select current configuration.
'
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''



var CurrentConfiguration$;
var ConfigurationList$;

proc GetConfigurationParameters()
	Profile(GetRigName$(), "ConfigurationList", "", ConfigurationList$);
	Profile(GetRigName$(), "CurrentConfiguration", "default", CurrentConfiguration$);
end;

proc SaveConfigurationParameters()
	Profile(GetRigName$(), "ConfigurationList", ConfigurationList$);
	Profile(GetRigName$(), "CurrentConfiguration", CurrentConfiguration$);
end;
	
func SelectConfigurationDialog%()
	var s$;
	var i%;
	var iReturn% := 0;
	GetConfigurationParameters();
	s$ := CurrentConfiguration$;

	DlgCreate("Select configuration", 25, 10);
	DlgString(1, "Configuration:", 20, "", 0, 0, ConfigurationList$);
	i% := DlgShow(s$);


	if i% = 1 then

		i% := CheckDup(s$, ConfigurationList$);
		if i% = 0 then
			' New config, add to Config list, set it to current
			if Len(ConfigurationList$)>0 then
				ConfigurationList$ := ConfigurationList$ + "|" + s$;
				CurrentConfiguration$ := s$;
			else
				ConfigurationList$ := s$;
				CurrentConfiguration$ := s$;
			endif;
		else
			CurrentConfiguration$ := s$;
		endif
		SaveConfigurationParameters();
		iReturn% := 1;

	else
		iReturn% := 0;
	endif

	return iReturn%;
end;

func CheckDup(value$, list$)
	var items$[20];
	var nitems%:=0;
	var i%;

	' Extract list into an array
	ReadSetup("", "", "", "", "|");
	nitems% := ReadStr(list$, items$);

	var s1tmp$, s2tmp$;
	s1tmp$ := UCase$(value$);
	for i% := 0 to nitems%-1 do
		s2tmp$ := UCase$(items$[i%]);
		if s1tmp$ = s2tmp$ then
			return 1;
		endif
	next

	return 0;
end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Configuration Selection END
'
''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Get Current configuration START
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

func GetCurrentConfiguration$()
	var s$;
	Profile(GetRigName$(), "CurrentConfiguration", "default", s$);
	return s$;
end;


''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Get Current configuration END
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''

'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Rig Daily Totals START
'
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''


var TotalTrials%;
var TotalRewards%;
var TotalDate$;


proc GetDailyTotals()
	var key$;
	key$ := "AlertRig\\Daily";
	Profile(key$, "TotalDate", "", TotalDate$);
	Profile(key$, "TotalTrials", 0, TotalTrials%);
	Profile(key$, "TotalRewards", 0, TotalRewards%);

	' Get date string if needed
	if Len(TotalDate$) = 0 then
		TotalDate$ := GetDayString$();
		SaveDailyTotals();
	endif
end;

proc SaveDailyTotals()
	var key$;
	key$ := "AlertRig\\Daily";
	Profile(key$, "TotalDate", TotalDate$);
	Profile(key$, "TotalTrials", TotalTrials%);
	Profile(key$, "TotalRewards", TotalRewards%);
end;

func DailyTotalsDialog%()
	GetDailyTotals();
	DlgCreate("Daily Totals");
	DlgText("Date: " + TotalDate$, 0, 1);
	DlgText("Trials: " + str$(TotalTrials%), 0, 2);
	DlgText("Rewards: " + str$(TotalRewards%), 0, 3);
	DlgButton(2, "Reset", ResetDailyTotals%);
	DlgShow();
	return 1;
end;


func GetDayString$()
	return Date$(2, 1, 3, 2, "-");
end;


func ResetDailyTotals%()
	GetDailyTotals();
	TotalRewards%:=0;
	TotalTrials%:=0;
	TotalDate$:= GetDayString$();
	SaveDailyTotals();
        return 0;
end;


'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
'
'	Rig Daily Totals END
'
'''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''''
